PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [3440, 1440]
  color = white
  expName = meta-mask
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Routines
  Routine trial_2
    ImageComponent image_2
      image = imgs\2_1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_3
    ImageComponent image_3
      image = imgs\3_1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_1
    ImageComponent image
      image = imgs\1_1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_4
    ImageComponent image_4
      image = imgs\4_1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine main_trials
    KeyboardComponent key_resp_2
      allowedKeys = 'q','e','a','d'
      durationEstim = 2
      forceEndRoutine = True
      startVal [time (s)] = .2
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    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent stim
      durationEstim = .03
      image [set every repeat] = $stimNames[currTrial]
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = stimDur
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    ImageComponent mask
      durationEstim = .03
      image [set every repeat] = $mskNames[currTrial]
      size = (0.5, 0.5)
      startEstim = 1.5
      startVal [time (s)] = 1 + stimDur + soaTimes[currTrial]
      stopVal [duration (s)] = stimDur
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    CodeComponent code
      Code Type = Py
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      End Routine:
        # Save out Variables
        thisExp.addData('currTrial',currTrial)
        thisExp.addData('imgName',stimNames[currTrial])
        thisExp.addData('mskName',mskNames[currTrial])
        thisExp.addData('soa',soaTimes[currTrial])

        # Increment Trial
        currTrial += 1
  Routine close
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank You!!
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  Routine start_main
    TextComponent text
      color = black
      durationEstim = 3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is going to begin the experiment

        Please press "q" "e" "a" "d" to select the quadrant you think
        the rectangle appeared

        Pres "=" to begin ...
    KeyboardComponent key_resp
      allowedKeys = 'equal'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent image_5
      image = imgs\1_2.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .01
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    ImageComponent image_6
      image = imgs\2_2.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .01
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    ImageComponent image_7
      image = imgs\3_2.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .01
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    ImageComponent image_8
      image = imgs\4_2.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .01
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  Routine welcome
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome

        Please press "q" "e" "a" "d" to select the quadrant the rectangle appears

        Pres "=" to begin with the practice
    KeyboardComponent key_resp_7
      allowedKeys = 'equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_code
      Code Type = Both
      Before Experiment:
        import math
        # Stim duration (in seconds)
        stimDur = .030  # 30 ms
        maxSOA  = .200  # 200 ms
        minSOA  = .030  # 30 ms
        numStim = 10   # Total number of trials

        # Get sequence of side of squares
        locChoices = ['1','2','3','4']
        soaRange  = maxSOA - minSOA
        locations = []; soaTimes = []
        for i in range(numStim):
            locations.append(locChoices[math.floor(random()*4)])
            soaTimes.append(random()*soaRange + minSOA)

        stimNames = [f'imgs/{k}_1.png' for k in locations]
        mskNames  = [f'imgs/{k}_2.png' for k in locations]

        # Start Next session
        currTrial = 0
      Before JS Experiment:
        var currTrial, locChoices, locations, maxSOA, minSOA, mskNames, numStim, soaRange, soaTimes, stimDur, stimNames;
        stimDur = 0.03;
        maxSOA = 0.2;
        minSOA = 0.03;
        numStim = 10;
        locChoices = ["1", "2", "3", "4"];
        soaRange = (maxSOA - minSOA);
        locations = [];
        soaTimes = [];
        for (var i, _pj_c = 0, _pj_a = util.range(numStim), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            locations.push(locChoices[Math.floor((Math.random() * 4))]);
            soaTimes.push(((Math.random() * soaRange) + minSOA));
        }
        stimNames = function () {
            var _pj_a = [], _pj_b = locations;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var k = _pj_b[_pj_c];
                _pj_a.push(`imgs/${k}_1.png`);
            }
            return _pj_a;
        }
        .call(this);
        mskNames = function () {
            var _pj_a = [], _pj_b = locations;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var k = _pj_b[_pj_c];
                _pj_a.push(`imgs/${k}_2.png`);
            }
            return _pj_a;
        }
        .call(this);
        currTrial = 0;
Flow
  Routine welcome
  Routine trial_1
  Routine trial_2
  Routine trial_3
  Routine trial_4
  Routine start_main
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = numStim
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    Routine main_trials
  LoopTerminator trials
  Routine close
