PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [3440, 1440]
  color = white
  expName = meta-mask2
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Routines
  Routine Welcome
    TextComponent text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Hello!

        This starts the practice. Please press

        'q' 'e' 'a' 'd'

        press '=' to continue
    KeyboardComponent key_resp
      allowedKeys = 'equal'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import math
        # Stim duration (in seconds)
        stimDur = .032   # 20 ms
        maxSOA  = .120   # 100 ms
        minSOA  = 0   # 30 ms
        numStim = 100    # Total number of trials
        imSize  = (1,1) # How to scale images

        # Get sequence of side of squares
        locChoices = ['1','2','3','4']
        soaRange  = maxSOA - minSOA
        locations = []; soaTimes = [];
        fixTimes = []; # Add random noise to fixation time
        jitter   = []; # Add jitter from cross to stim
        for i in range(numStim):
            locations.append(locChoices[math.floor(random()*4)])
            soaTimes.append(random()*soaRange + minSOA)
            fixTimes.append(((random()*.5) - .25) + .75)
            jitter.append((random()*.5))

        stimNames = [f'imgs/{k}_stim.png' for k in locations]

        # Start Next session
        currTrial = 0
  Routine demo_1
    ImageComponent image
      image = imgs/2_stim.png
      saveStartStop = False
      size = imSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    PolygonComponent polygon_2
      fillColor = black
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine demo_2
    ImageComponent image_2
      image = imgs/4_stim.png
      saveStartStop = False
      size = imSize
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_3
      allowedKeys = 'e'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    PolygonComponent polygon_3
      fillColor = black
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine demo_3
    ImageComponent image_3
      image = imgs/3_stim.png
      saveStartStop = False
      size = imSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_4
      allowedKeys = 'd'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    PolygonComponent polygon_4
      fillColor = black
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine demo_4
    ImageComponent image_4
      image = imgs/1_stim.png
      saveStartStop = False
      size = imSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_5
      allowedKeys = 'a'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    PolygonComponent polygon_5
      fillColor = black
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine main_trials
    PolygonComponent polygon
      durationEstim = .75
      fillColor = gray
      interpolate = nearest
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixTimes[currTrial]
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        # Save out Variables
        thisExp.addData('currTrial',currTrial)
        thisExp.addData('imgName',stimNames[currTrial])
        thisExp.addData('soa',soaTimes[currTrial])
        thisExp.addData('fixTime',fixTimes[currTrial])
        thisExp.addData('jitter',jitter[currTrial])

        # Increment Trial
        currTrial += 1
    ImageComponent stim
      durationEstim = .03
      image [set every repeat] = $stimNames[currTrial]
      interpolate = nearest
      size = imSize
      startEstim = 1.25
      startVal [time (s)] = fixTimes[currTrial] + jitter[currTrial]
      stopVal [duration (s)] = stimDur
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    ImageComponent mask
      durationEstim = .03
      image = imgs/mask.png
      interpolate = nearest
      size = imSize
      startEstim = 1.5
      startVal [time (s)] = fixTimes[currTrial] + jitter[currTrial] + stimDur + soaTimes[currTrial]
      stopVal [duration (s)] = stimDur
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    KeyboardComponent mainTrial_response
      allowedKeys = 'q','e','d','a'
      forceEndRoutine = True
      startVal [time (s)] = .2
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  Routine close
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you!!
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  Routine startMain
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Press '=' to continue to main trials
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    KeyboardComponent key_resp_6
      allowedKeys = 'equal'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine test
    ImageComponent image_5
      image = imgs\mask.png
      size = imSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent image_6
      image = imgs\1_stim.png
      size = imSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent image_7
      image = imgs\2_stim.png
      size = imSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent image_8
      image = imgs\4_stim.png
      size = imSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent image_9
      image = imgs\3_stim.png
      size = imSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_7
      allowedKeys = '1'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon_6
      fillColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine Welcome
  LoopInitiator imageTest loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine test
  LoopTerminator imageTest
  Routine demo_1
  Routine demo_2
  Routine demo_3
  Routine demo_4
  Routine startMain
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = numStim
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    Routine main_trials
  LoopTerminator trials
  Routine close
